/*                                                                               
Copyright (c) 2015 EPFL-BBP, All rights reserved.                                
                                                                                 
THIS SOFTWARE IS PROVIDED BY THE BLUE BRAIN PROJECT ``AS IS''                    
AND ANY EXPRESS OR IMPLIED WARRANTIES, INCLUDING, BUT NOT LIMITED TO,            
THE IMPLIED WARRANTIES OF MERCHANTABILITY AND FITNESS FOR A PARTICULAR           
PURPOSE ARE DISCLAIMED. IN NO EVENT SHALL THE BLUE BRAIN PROJECT                 
BE LIABLE FOR ANY DIRECT, INDIRECT, INCIDENTAL, SPECIAL, EXEMPLARY, OR           
CONSEQUENTIAL DAMAGES (INCLUDING, BUT NOT LIMITED TO, PROCUREMENT OF             
SUBSTITUTE GOODS OR SERVICES; LOSS OF USE, DATA, OR PROFITS; OR                  
BUSINESS INTERRUPTION) HOWEVER CAUSED AND ON ANY THEORY OF LIABILITY,            
WHETHER IN CONTRACT, STRICT LIABILITY, OR TORT (INCLUDING NEGLIGENCE             
OR OTHERWISE) ARISING IN ANY WAY OUT OF THE USE OF THIS SOFTWARE, EVEN           
IF ADVISED OF THE POSSIBILITY OF SUCH DAMAGE.                                    
                                                                                 
This work is licensed under a 
Creative Commons Attribution-NonCommercial-ShareAlike 4.0 International License.
To view a copy of this license, visit 
http://creativecommons.org/licenses/by-nc-sa/4.0/legalcode or send a letter to 
Creative Commons, 
171 Second Street, Suite 300, 
San Francisco, California, 94105, USA.                 
*/           

/*                                                                               
 * @file init.hoc                                                           
 * @brief Initialisation                                
 * @author Werner Van Geit @ BBP                                                 
 * @date 2015                                                                    
*/        

//----------------------------------------------------------------------------
//  define a panel to run the different demos
//----------------------------------------------------------------------------

{load_file("nrngui.hoc")}
{load_file("constants.hoc")}
{load_file("creategui.hoc")}
{load_file("createsimulation.hoc")}


// celsius = 37 // default temp


steps_per_ms = 40
dt = .025
secondorder = 0
tstop = 1010



// By default, enable synapses
synapses_enabled = 0

// Set up simulation
create_cell(synapses_enabled)

{load_file("setParams.hoc")}
{load_file("editMorphology.hoc")} // procs for editing cell morphology

